PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Show mouse = True
  Units = height
  Window size (pixels) = [1707, 960]
  expName = Voice_indentity_task
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Stimuli_assignment
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    CodeComponent assign_code
      Code Type = Py
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      Begin Experiment:
        import pandas as pd
        import random
        import sounddevice as sd
        from psychopy import prefs

        prefs.hardware['audioBufferSecs'] = 180
        prefs.saveUserPrefs()

        stimulus_file = os.path.join(os.getcwd(), 'stimulus', 'Stimulus60.xlsx')
        category_file = os.path.join(os.getcwd(), 'stimulus', 'Category_instructions.xlsx')

        try:
            stimulus_df = pd.read_excel(stimulus_file)
            category_df = pd.read_excel(category_file)
            print(f"成功读取刺激材料文件，共{len(stimulus_df)}个刺激")
            print(f"成功读取类别指导语文件，共{len(category_df)}个类别")
        except Exception as e:
            print(f"读取文件失败: {e}")
            # 创建示例数据
            stimulus_df = pd.DataFrame({
                'wordID': range(1, 61),
                'word_list': [f'句子_{i}' for i in range(1, 61)],
                'word_category': ['Nature', 'Objects', 'States', 'People', 'Animals/Plants', 'Actions'] * 10
            })
            category_df = pd.DataFrame({
                'word_category': ['Nature', 'Objects', 'States', 'People', 'Animals/Plants', 'Actions'],
                'Instructions': [f'{cat}类别的指导语' for cat in ['Nature', 'Objects', 'States', 'People', 'Animals/Plants', 'Actions']]
            })


        def create_stimulus_conditions(stimulus_df, category_df):
            """
            根据word_category创建free和controlled条件的刺激材料
            """
            # 定义6个类别
            categories = ['Nature', 'Objects', 'States', 'People', 'Animals/Plants', 'Actions']

            # 检查数据中是否包含必要的列
            if 'word_category' not in stimulus_df.columns:
                print("错误：刺激材料数据框中缺少'word_category'列")
                return None

            # 存储结果的列表
            selected_stimuli = []

            # 对每个类别进行处理
            for category in categories:
                # 获取当前类别的所有刺激
                category_stimuli = stimulus_df[stimulus_df['word_category'] == category]

                # 检查当前类别是否有足够的刺激材料
                if len(category_stimuli) < 2:
                    print(f"警告：类别 '{category}' 只有 {len(category_stimuli)} 个刺激，需要至少2个")
                    continue

                # 随机选择2个不同的刺激
                selected_indices = random.sample(list(category_stimuli.index), 2)
                stim1 = category_stimuli.loc[selected_indices[0]].copy()
                stim2 = category_stimuli.loc[selected_indices[1]].copy()

                # 随机决定哪个是free，哪个是controlled
                if random.random() > 0.5:
                    stim1['condition'] = 'free'
                    stim2['condition'] = 'controlled'
                else:
                    stim1['condition'] = 'controlled'
                    stim2['condition'] = 'free'

                selected_stimuli.extend([stim1, stim2])

            # 创建结果DataFrame
            result_df = pd.DataFrame(selected_stimuli)
            for idx, row in result_df.iterrows():
                other_categories = [cat for cat in categories if cat != row['word_category']]
            # 随机选择一个类别作为controlled_category
                result_df.at[idx, 'controlled_category'] = random.choice(other_categories)

            # 合并Category_instructions信息
            # 首先为每个刺激添加对应的指导语信息
            result_df = result_df.merge(
                category_df,
                on='word_category',
                how='left',
                suffixes=('', '_from_category')
            )

            # 然后为controlled条件的刺激添加controlled_category对应的指导语信息
            # 重命名category_df的列，以便与controlled_category合并
            controlled_category_df = category_df.copy()
            controlled_category_df.rename(columns={
                'word_category': 'controlled_category',
                'Instructions': 'controlled_Instructions',
                'Instructions_audiofile': 'controlled_Instructions_audiofile',
                'Instructions_audiofile_path': 'controlled_Instructions_audiofile_path'
            }, inplace=True)

            # 合并controlled_category对应的指导语信息
            result_df = result_df.merge(
                controlled_category_df,
                on='controlled_category',
                how='left'
            )
            result_df.to_csv('trial_df.csv')

            return result_df

        # 执行刺激材料创建
        final_stimuli_df = create_stimulus_conditions(stimulus_df, category_df)
        print(f"\n数据形状: {final_stimuli_df.shape}")
        print(f"Free条件数量: {len(final_stimuli_df[final_stimuli_df['condition'] == 'free'])}")
        print(f"Controlled条件数量: {len(final_stimuli_df[final_stimuli_df['condition'] == 'controlled'])}")

        trials_list = []
        for idx, row in final_stimuli_df.iterrows():
            trial = {
                'wordID': row['wordID'],
                'word_list': row['word_list'],
                'word_category': row['word_category'],
                'word_list_audiofile': row.get('word_list_audiofile', ''),
                'word_list_audiofile_path': row.get('word_list_audiofile_path', ''),
                'condition': row['condition'],
                'Instructions': row.get('Instructions', ''),
                'Instructions_audiofile': row.get('Instructions_audiofile', ''),
                'Instructions_audiofile_path': row.get('Instructions_audiofile_path', ''),
                'controlled_category': row.get('controlled_category', ''),
                'controlled_Instructions': row.get('controlled_Instructions', ''),
                'controlled_Instructions_audiofile': row.get('controlled_Instructions_audiofile', ''),
                'controlled_Instructions_audiofile_path': row.get('controlled_Instructions_audiofile_path', ''),
                'group': 1  # 标记属于第一组
            }
            trials_list.append(trial)
        print(f"\n成功创建试验列表，共{len(trials_list)}个试验")

        random.shuffle(trials_list)

        # 打印试验列表摘要
        print("\n试验列表摘要:")
        for i, trial in enumerate(trials_list):
            print(f"试验 {i+1}: ID={trial['wordID']}, word={trial['word_list']}, 条件={trial['condition']}, 类别={trial['word_category']}", end="")
            print(f", 控制类别={trial['controlled_category']}")
            print(f", 控制音频文件={trial['controlled_Instructions_audiofile_path']}")
            print()

        thisExp.trial_counter = 0
        thisExp.ifControlTrial = None
        thisExp.responseCount = 0
        thisExp.randomCount = 0
    CodeComponent instruction_assign_code
      Code Type = Py
      Begin Experiment:
        instruction_file = os.path.join(os.getcwd(), 'stimulus', 'instructions.xlsx')

        try:
            instruction_df = pd.read_excel(instruction_file)
            print(f"成功读取刺激材料文件，共{len(instruction_df)}个刺激")
        except Exception as e:
            print(f"读取文件失败: {e}")
            # 创建示例数据
            instruction_df = pd.DataFrame({
                'category': range(1, 9),
            })

        instructions_list = []
        for idx, row in instruction_df.iterrows():
            instruction = {
                'image_path': row['image_path'],
            }
            instructions_list.append(instruction)
        print(f"\n成功创建指导语列表，共{len(instructions_list)}个指导语图片")

        thisExp.instruction_counter = 0
    CodeComponent trigger_code
      Code Type = Py
      disabled = True
      Begin Experiment:
        import nidaqmx
        import nidaqmx.system

        # 创建全局任务对象

        thisExp.input_task = nidaqmx.Task()
        thisExp.output_task = nidaqmx.Task()
        thisExp.output_task.do_channels.add_do_chan("Dev1/port0/line0")
        thisExp.output_task.write(np.array([False], dtype=bool).tolist())  # 初始化为低电平
        print("NI-DAQmx任务已初始化")

        system = nidaqmx.system.System.local()
        for device in system.devices:
            print(device)

        def sendtrigger(n):
            print('send trigger: {0}'.format(n))
            triggerbox.output_event_data(n)

        thisExp.trigger_n = 0
        ## 输入是否需要触发trigger
        trigger_on = False

        # 连接triggerbox
        if trigger_on:
            com = int(input('COM: '))
            triggerbox = TriggerBox("COM"+str(com))
  Routine instruction
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    ImageComponent instruction_image
      image [set every repeat] = image/start.jpg
      size = (1.78, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instruction_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_practice
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    ImageComponent instr_practice_image
      image = image/instr_practice.jpg
      size = (1.78, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instr_practice_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = ＋
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  Routine rest_within
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    CodeComponent rest_code
      Code Type = Py
      Begin Routine:
        # 生成0到1秒之间的随机持续时间
        rest_duration = random.uniform(0.2, 0.4)
      End Routine:
        #thisExp.output_task.write(np.array([False], dtype=bool).tolist())
        #print("触发器信号: trial结束 的 低电平")
    TextComponent rest_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rest_duration
      text = rest
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    ParallelOutComponent rest_port
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 13
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine rest
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    ImageComponent rest_image
      image = image/rest.jpg
      size = (1.78, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent rest_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_text
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    CodeComponent trial_code
      Code Type = Py
      Begin Experiment:
        currentWord = []
        currentWordAudiofilePath = []
      Begin Routine:
        # 获取当前trial索引
        trial_index = thisExp.trial_counter
        thisExp.responseCount = 0

        current_trial = trials_list[trial_index]
        currentWord = current_trial['word_list']
        currentWordID = current_trial['wordID']
        currentCategory = current_trial['word_category']
        currentWordAudiofile = current_trial['word_list_audiofile']
        currentWordAudiofilePath = current_trial['word_list_audiofile_path']
        currentcondition = current_trial['condition']

        # controlled条件使用controlled_category的指导语
        currentControlInstr = current_trial['controlled_Instructions']
        currentControlInstrAudio = current_trial['controlled_Instructions_audiofile']
        currentControlInstrAudioPath = current_trial['controlled_Instructions_audiofile_path']
        currentControlledCategory = current_trial['controlled_category']

        #print(f"current_trial : {current_trial}")
        print(f"currentWord : {currentWord}")
        print(f"currentcondition : {currentcondition}")
        print(f"currentControlledCategory : {currentControlledCategory}")


        # 更新计数器
        thisExp.trial_counter += 1
        thisExp.ifControlTrial = currentcondition

        thisExp.addData('word_list', currentWord)
        thisExp.addData('wordID', currentWordID)
        thisExp.addData('word_category', currentCategory)
        thisExp.addData('condition', currentcondition)
        thisExp.addData('controlled_category', currentControlledCategory)
        thisExp.addData('word_list_audiofile', currentWordAudiofile)
        thisExp.addData('word_list_audiofile_path', currentWordAudiofilePath)
        thisExp.addData('Instructions', currentControlInstr)
        thisExp.addData('Instructions_audiofile', currentControlInstrAudio)
        thisExp.addData('Instructions_audiofile_path', currentControlInstrAudioPath)

        trial_word_text.text = currentWord

        ## trial开始时设置为高电平
        #thisExp.output_task.write(np.array([True], dtype=bool).tolist())
        #print("触发器信号: 起始词朗读开始高电平")
      End Routine:
        thisExp.randomCount = random.randint(4, 7)
        print(f"random_number:{thisExp.randomCount}")

        thisExp.addData('randomCount_control_loc', thisExp.randomCount)

        #thisExp.output_task.write(np.array([False], dtype=bool).tolist())
        #print("触发器信号: 起始词朗读结束低电平")
    TextComponent trial_word_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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    SoundComponent trial_start_sound
      sound [set every repeat] = stimulus/audiofile/start/暖心学姐_普通话_接下来我会给您一个起始词，您需__AI生成.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    SoundComponent trial_word_sound
      sound [set every repeat] = $currentWordAudiofilePath
      startVal [time (s)] = 6
      stopVal [duration (s)] = 2
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  Routine free_response_talk
    RoutineSettingsComponent free_response_talk
      skipIf = thisExp.ifControlTrial == 'controlled'
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    CodeComponent count_code
      Code Type = Py
      Begin Routine:
        thisExp.responseCount = 0

        # 创建一个简单的标志来跟踪按键状态
        key_pressed = False

        #thisExp.output_task.write(np.array([True], dtype=bool).tolist())
        #print("触发器信号: response 的 routine 开始高电平")
        #
      Each Frame:
        # 简化按键检测逻辑
        current_keys = count_key_resp.getKeys(keyList=['1'], waitRelease=True)
        count_text.text = str(thisExp.responseCount + 1)

        #thisExp.output_task.write(np.array([True], dtype=bool).tolist())
        ##print("触发器信号: response 的 每一帧高电平")

        if current_keys:
            # 只有当检测到新的按键时才增加计数
            thisExp.responseCount += 1
            print(f"计数增加到: {thisExp.responseCount}")
            thisExp.addData('responseCount', thisExp.responseCount)
            thisExp.addData('count_key_resp.keys', count_key_resp.keys)
            thisExp.addData('count_key_resp.rt', count_key_resp.rt)
            # 清空按键缓冲区
            count_key_resp.keys = []
            count_key_resp.rt = []
            count_text.text = str(thisExp.responseCount + 1)

        #    thisExp.output_task.write(np.array([False], dtype=bool).tolist())
        #    print("触发器信号: 按键计数低电平")

        #    if trigger_on:
        #        sendtrigger(1000+thisExp.trigger_n+1)
        #        thisExp.addData('triggerbox', triggerbox)
        #        thisExp.trigger_n+=1
        #        print(f"thisExp.trigger_n:{thisExp.trigger_n}")
    TextComponent count_text
      letterHeight = 0.1
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent free_association_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = 请进行自由联想
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    MicrophoneComponent free_response_mic
      channels = mono
      device = None
      disabled = True
      durationEstim = 180
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      transcribe = False
      transcribeBackend = google
      transcribeLang = en-US
      transcribeWhisperDevice = auto
      transcribeWhisperModel = base
      trimSilent = False
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    KeyboardComponent count_key_resp
      allowedKeys = '1'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    KeyboardComponent free_response_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Controlled_response_talk
    RoutineSettingsComponent Controlled_response_talk
      skipIf = (thisExp.ifControlTrial == 'free') | (thisExp.responseCount >= thisExp.randomCount)
      stopVal [condition] = thisExp.responseCount == thisExp.randomCount
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    CodeComponent Control_count_code
      Code Type = Py
      Begin Routine:
        thisExp.responseCount = 0
        # 创建一个简单的标志来跟踪按键状态
        key_pressed = False

        #thisExp.output_task.write(np.array([True], dtype=bool).tolist())
        #print("触发器信号: response 的 routine 开始高电平")
      Each Frame:
        # 简化按键检测逻辑
        current_keys = Control_count_key_resp.getKeys(keyList=['1'], waitRelease=True)
        Control_count_text.text = str(thisExp.responseCount + 1)

        #thisExp.output_task.write(np.array([True], dtype=bool).tolist())
        ##print("触发器信号: response 的 每一帧高电平")

        if current_keys:
            # 只有当检测到新的按键时才增加计数
            thisExp.responseCount += 1
            print(f"thisExp.responseCount:{thisExp.responseCount}")
            thisExp.addData('responseCount', thisExp.responseCount)
            thisExp.addData('Control_count_key_resp.keys', Control_count_key_resp.keys)
            thisExp.addData('Control_count_key_resp.rt', Control_count_key_resp.rt)
            # 清空按键缓冲区
            Control_count_key_resp.keys = []
            Control_count_key_resp.rt = []
            Control_count_text.text = str(thisExp.responseCount + 1)

        #    thisExp.output_task.write(np.array([False], dtype=bool).tolist())
        #    print("触发器信号: 按键计数低电平")

        #    if trigger_on:
        #        sendtrigger(1000+thisExp.trigger_n+1)
        #        thisExp.addData('triggerbox', triggerbox)
        #        thisExp.trigger_n+=1
        #        print(f"thisExp.trigger_n:{thisExp.trigger_n}")
        #
    TextComponent Controlled_association_text_free
      letterHeight = 0.1
      startVal [time (s)] = 0
      text = 请进行自由联想
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    TextComponent Control_count_text
      letterHeight = 0.1
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0
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    MicrophoneComponent controlled_response_free_mic
      channels = auto
      device = None
      disabled = True
      durationEstim = 180
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      transcribe = False
      transcribeBackend = google
      transcribeLang = en-US
      transcribeWhisperDevice = auto
      transcribeWhisperModel = base
      trimSilent = False
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    KeyboardComponent Control_count_key_resp
      allowedKeys = '1'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    KeyboardComponent controlled_response_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine after_control_talk
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  Routine after_control_response
    RoutineSettingsComponent after_control_response
      skipIf = (thisExp.ifControlTrial == 'free') | (thisExp.responseCount < thisExp.randomCount)
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    CodeComponent after_control_code
      Code Type = Py
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      Begin Routine:
        #thisExp.output_task.write(np.array([True], dtype=bool).tolist())
        #print("触发器信号: after control response 的 routine 开始高电平")
      Each Frame:
        # 简化按键检测逻辑
        current_keys = Control_count_key_resp_2.getKeys(keyList=['1'], waitRelease=True)
        Control_count_text_2.text = str(thisExp.responseCount + 1)

        #thisExp.output_task.write(np.array([True], dtype=bool).tolist())
        ##print("触发器信号: response 的 每一帧高电平")

        if current_keys:
            # 只有当检测到新的按键时才增加计数
            thisExp.responseCount += 1
            print(f"thisExp.responseCount:{thisExp.responseCount}")
            thisExp.addData('responseCount', thisExp.responseCount)
            thisExp.addData('Control_count_key_resp_2.keys', Control_count_key_resp_2.keys)
            thisExp.addData('Control_count_key_resp_2.rt', Control_count_key_resp_2.rt)
            # 清空按键缓冲区
            Control_count_key_resp_2.keys = []
            Control_count_key_resp_2.rt = []
            Control_count_text_2.text = str(thisExp.responseCount + 1)

        #    thisExp.output_task.write(np.array([False], dtype=bool).tolist())
        #    print("触发器信号: 按键计数低电平")
        #
        #    if trigger_on:
        #        sendtrigger(1000+thisExp.trigger_n+1)
        #        thisExp.addData('triggerbox', triggerbox)
        #        thisExp.trigger_n+=1
        #        print(f"thisExp.trigger_n:{thisExp.trigger_n}")
    TextComponent Control_count_text_2
      letterHeight = 0.1
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0
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    MicrophoneComponent after_mic
      channels = auto
      device = None
      disabled = True
      durationEstim = 180
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 180
      transcribe = False
      transcribeBackend = google
      transcribeLang = en-US
      transcribeWhisperDevice = auto
      transcribeWhisperModel = base
      trimSilent = False
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    TextComponent Controlled_association_text_free_4
      letterHeight = 0.1
      startVal [time (s)] = 0
      text = 请继续进行自由联想
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    KeyboardComponent Control_count_key_resp_2
      allowedKeys = '1'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    KeyboardComponent controlled_response_key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine control
    RoutineSettingsComponent control
      skipIf = (thisExp.ifControlTrial == 'free') | (thisExp.responseCount != thisExp.randomCount)
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    CodeComponent control_code
      Code Type = Py
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      Begin Routine:
        Control_category_text.text = currentControlInstr
        print("播放control")
        print(f"currentControlInstr:{currentControlInstr}")
        print(f"currentControlInstrAudioPath:{currentControlInstrAudioPath}")
    TextComponent Control_category_text
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 9
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    SoundComponent Controlled_category_sound
      sound [set every repeat] = $currentControlInstrAudioPath
      startVal [time (s)] = 0
      stopVal [duration (s)] = 9
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Flow
  Routine Stimuli_assignment
  Routine instruction
  LoopInitiator trials_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 12
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    Routine fixation
    Routine trial_text
    Routine free_response_talk
    Routine Controlled_response_talk
    Routine control
    Routine after_control_response
    Routine rest_within
  LoopTerminator trials_loop
