PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Voice_indentity_task
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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  Routine Stimuli_assignment
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    CodeComponent assign_code
      Code Type = Py
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      Begin Experiment:
        import pandas as pd
        import random

        stimulus_file = os.path.join(os.getcwd(), 'stimulus', 'Stimulus.xlsx')
        roleName_file = os.path.join(os.getcwd(), 'stimulus', 'RoleName.xlsx')

        try:
            stimulus_df = pd.read_excel(stimulus_file)
            rolename_df = pd.read_excel(roleName_file)
            print(f"成功读取刺激材料文件，共{len(stimulus_df)}个刺激")
        except Exception as e:
            print(f"读取刺激材料文件失败: {e}")
            # 创建示例数据（仅用于测试，实际实验时应确保文件存在）
            stimulus_df = pd.DataFrame({
                'sentenceID': range(1, 121),
                'sentence_list': [f'句子_{i}' for i in range(1, 121)]
            })

        roleName = {row['Role']: [row['Name'], row['EnglishName']] for _, row in rolename_df.iterrows()}

        # 随机分配声音条件函数
        def assign_voice_conditions(df):
            """为刺激材料随机分配声音条件"""
            # 复制数据框
            df_copy = df.copy()

            # 确保sentenceID是整数
            df_copy['sentenceID'] = df_copy['sentenceID'].astype(int)

            # 随机打乱刺激顺序
            shuffled_indices = df_copy.index.tolist()
            random.shuffle(shuffled_indices)
            df_shuffled = df_copy.loc[shuffled_indices].reset_index(drop=True)

            # 分配声音条件（每个条件平均分配）
            n_stimuli = len(df_shuffled)
            n_per_condition = n_stimuli // 3

            # 计算每个条件的数量
            familiar_count = n_per_condition
            unfamiliar_count = n_per_condition
            celebrity_count = n_stimuli - (n_per_condition * 2)

            voice_conditions = (['familiar'] * familiar_count +
                               ['unfamiliar'] * unfamiliar_count +
                               ['celebrity'] * celebrity_count)

            df_shuffled['voice'] = voice_conditions

            # 重新按sentenceID排序（可选）
            df_assigned = df_shuffled.sort_values('sentenceID').reset_index(drop=True)

            # 添加文件路径
            df_assigned['filepath'] = df_assigned.apply(
                lambda row: f'stimulus/{row["voice"]}/Identity_Stimulus_{row["sentenceID"]:03d}.wav',
                axis=1
            )

            return df_assigned

        # 将120个刺激随机分成两组
        all_stimuli = stimulus_df.copy()
        all_indices = list(all_stimuli.index)
        random.shuffle(all_indices)  # 随机打乱

        # 分成两组，每组60个
        group1_indices = all_indices[:30]
        group2_indices = all_indices[30:60]
        group3_indices = all_indices[60:90]
        group4_indices = all_indices[90:]

        group1_stimuli = all_stimuli.loc[group1_indices].reset_index(drop=True)
        group2_stimuli = all_stimuli.loc[group2_indices].reset_index(drop=True)
        group3_stimuli = all_stimuli.loc[group3_indices].reset_index(drop=True)
        group4_stimuli = all_stimuli.loc[group4_indices].reset_index(drop=True)

        print(f"第一组刺激数量: {len(group1_stimuli)}")
        print(f"第二组刺激数量: {len(group2_stimuli)}")
        print(f"第三组刺激数量: {len(group3_stimuli)}")
        print(f"第四组刺激数量: {len(group4_stimuli)}")

        # 为每组分配声音条件
        Assigned_Stimulus_Group1 = assign_voice_conditions(group1_stimuli)
        Assigned_Stimulus_Group2 = assign_voice_conditions(group2_stimuli)
        Assigned_Stimulus_Group3 = assign_voice_conditions(group3_stimuli)
        Assigned_Stimulus_Group4 = assign_voice_conditions(group4_stimuli)

        # 将分配结果转换为列表形式，便于PsychoPy使用
        trials_list_formal1 = []
        for idx, row in Assigned_Stimulus_Group1.iterrows():
            trial = {
                'sentenceID': row['sentenceID'],
                'sentence_list': row['sentence_list'],
                'voice': row['voice'],
                'filepath': row['filepath'],
                'group': 1  # 标记属于第一组
            }
            trials_list_formal1.append(trial)

        trials_list_formal2 = []
        for idx, row in Assigned_Stimulus_Group2.iterrows():
            trial = {
                'sentenceID': row['sentenceID'],
                'sentence_list': row['sentence_list'],
                'voice': row['voice'],
                'filepath': row['filepath'],
                'group': 2  # 标记属于第二组
            }
            trials_list_formal2.append(trial)

        trials_list_formal3 = []
        for idx, row in Assigned_Stimulus_Group3.iterrows():
            trial = {
                'sentenceID': row['sentenceID'],
                'sentence_list': row['sentence_list'],
                'voice': row['voice'],
                'filepath': row['filepath'],
                'group': 3  # 标记属于第二组
            }
            trials_list_formal3.append(trial)

        trials_list_formal4 = []
        for idx, row in Assigned_Stimulus_Group4.iterrows():
            trial = {
                'sentenceID': row['sentenceID'],
                'sentence_list': row['sentence_list'],
                'voice': row['voice'],
                'filepath': row['filepath'],
                'group': 4  # 标记属于第二组
            }
            trials_list_formal4.append(trial)
        # 随机化每组内的试验顺序
        random.shuffle(trials_list_formal1)
        random.shuffle(trials_list_formal2)
        random.shuffle(trials_list_formal3)
        random.shuffle(trials_list_formal4)

        print(f"第一组刺激随机化: {len(trials_list_formal1)}")
        print(trials_list_formal1)
        print(f"第二组刺激随机化: {len(trials_list_formal2)}")
        print(trials_list_formal2)
        thisExp.trials_list_formal1 = trials_list_formal1
        thisExp.trials_list_formal2 = trials_list_formal2
        thisExp.trials_list_formal3 = trials_list_formal3
        thisExp.trials_list_formal4 = trials_list_formal4

        print(f"身份姓名: {len(roleName)}")
        thisExp.roleName = roleName
        print(roleName)
        thisExp.trial_counter1 = 0
        thisExp.trial_counter2 = 0
        thisExp.trial_counter3 = 0
        thisExp.trial_counter4 = 0
    CodeComponent practice_assign_code
      Code Type = Py
      Begin Experiment:
        # 练习刺激的路径
        practice_path = os.path.join('stimulus', 'practice')

        # 获取练习文件夹中的所有音频文件
        practice_files = []
        for file in os.listdir(practice_path):
            if file.endswith(('.mp3', '.wav', '.m4a', '.ogg')):  # 支持多种音频格式
                practice_files.append(file)

        # 按文件名排序以确保顺序一致
        practice_files.sort()

        # 检查文件数量
        if len(practice_files) != 9:
            print(f"警告: 练习文件夹中应该有9个文件，但找到了{len(practice_files)}个文件")

        # 创建练习试验列表
        trials_list_practice = []

        # 分配声音条件
        for i, filename in enumerate(practice_files):
            # 根据索引分配声音条件
            if i < 3:  # 前三个文件是unfamiliar
                voice = 'unfamiliar'
            elif i < 6:  # 中间三个文件是celebrity
                voice = 'celebrity'
            else:  # 最后三个文件是familiar
                voice = 'familiar'

            # 创建完整的文件路径
            filepath = os.path.join(practice_path, filename)

            # 创建试验字典
            trial = {
                'voice': voice,
                'filepath': filepath
            }

            trials_list_practice.append(trial)

        # 将练习试验列表存储到实验变量中
        random.shuffle(trials_list_practice)
        thisExp.trials_list_practice = trials_list_practice
        thisExp.practicetrial_counter = 0
        # 打印调试信息
        print(f"成功创建练习试验列表，共{len(trials_list_practice)}个试验")
        for i, trial in enumerate(trials_list_practice):
            print(f"试验{i+1}: 声音条件={trial['voice']}, 文件={trial['filepath']}")
  Routine instruction
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    ImageComponent instruction_image
      image = image/instr1.jpg
      size = (1.78, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instruction_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_practice
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    ImageComponent instr_practice_image
      image = image/instr2.jpg
      size = (1.78, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instr_practice_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = ＋
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  Routine formal1_run1_trial
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    CodeComponent formal_1_trial_code
      Code Type = Py
      Begin Experiment:
        currentfilepath = []
      Begin Routine:
        # 获取当前trial索引
        trial_index = thisExp.trial_counter1

        current_trial = thisExp.trials_list_formal1[trial_index]
        currentSentence = current_trial['sentence_list']
        currentSentenceID = current_trial['sentenceID']
        currentVoice = current_trial['voice']
        currentfilepath = current_trial['filepath']

        # 更新计数器
        thisExp.trial_counter1 += 1
        thisExp.correctAnswer = correct_answers.get(currentVoice, '未知')

        thisExp.addData('sentence_list', currentSentence)
        thisExp.addData('sentenceID', currentSentenceID)
        thisExp.addData('voice', currentVoice)
        thisExp.addData('filepath', currentfilepath)
        thisExp.addData('correct_answer', thisExp.correctAnswer)
    SoundComponent formal_1_sound
      sound [set every repeat] = $currentfilepath
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine practice_trial
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    CodeComponent practice_trial_code
      Code Type = Py
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      Begin Experiment:
        currentpracticefilepath = []
      Begin Routine:
        import pandas as pd

        # 获取当前trial索引
        trial_index = thisExp.practicetrial_counter

        currentpractice_trial = thisExp.trials_list_practice[trial_index]
        currentpracticeVoice = currentpractice_trial['voice']
        currentpracticefilepath = currentpractice_trial['filepath']

        print(f"试验{trial_index+1}: 声音条件={currentpracticeVoice}, 文件={currentpracticefilepath}")

        # 更新计数器
        thisExp.practicetrial_counter += 1
        thisExp.correctAnswer = correct_answers.get(currentpracticeVoice, '未知')

        thisExp.addData('voice', currentpracticeVoice)
        thisExp.addData('filepath', currentpracticefilepath)
        thisExp.addData('correct_answer', thisExp.correctAnswer)
    SoundComponent sound_practice
      sound [set every repeat] = $currentpracticefilepath
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine selection_practice
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    CodeComponent selection_practice_code
      Code Type = Py
      Begin Routine:
        # selection_formal1_2 routine的Begin Routine部分
        # 随机分配三个身份到三个按键位置
        voice_types = ['familiar', 'celebrity', 'unfamiliar', 'someoneElse']
        random.shuffle(voice_types)  # 随机打乱顺序

        # 创建本次试验的按键与身份映射
        key_to_voice = {
            '1': voice_types[0],
            '2': voice_types[1],
            '3': voice_types[2],
            '4': voice_types[3]
        }

        # 存储本次试验的映射关系，用于后续反馈
        thisExp.current_key_to_voice = key_to_voice

        # 为每个身份随机选择显示中文名还是英文名
        name_display = {}  # 存储本次试验中每个身份显示的名字
        language_choice = {}  # 存储语言选择（用于数据记录）

        for voice_type in voice_types:
            # 随机选择中文或英文
            chosen_language = random.choice(['chinese', 'english'])
            language_choice[voice_type] = chosen_language

            # 根据选择的语言获取对应的名字
            if chosen_language == 'chinese':
                name_display[voice_type] = thisExp.roleName[voice_type][0]  # 中文名
            else:
                name_display[voice_type] = thisExp.roleName[voice_type][1]  # 英文名

        # 设置三个选项文本组件的内容
        # 使用随机分配的映射关系
        option1_practice_text.text = f"1. {name_display[key_to_voice['1']]}"    # 选项1
        option2_practice_text.text = f"2. {name_display[key_to_voice['2']]}"    # 选项2
        option3_practice_text.text = f"3. {name_display[key_to_voice['3']]}"    # 选项3
        option4_practice_text.text = f"4. {name_display[key_to_voice['4']]}"    # 选项4

        # 记录语言选择信息和按键映射到实验数据
        thisExp.addData('familiar_name_language', language_choice.get('familiar', '未出现'))
        thisExp.addData('celebrity_name_language', language_choice.get('celebrity', '未出现'))
        thisExp.addData('unfamiliar_name_language', language_choice.get('unfamiliar', '未出现'))
        thisExp.addData('someoneElse_name_language', language_choice.get('someoneElse', '未出现'))
        thisExp.addData('familiar_name_displayed', name_display.get('familiar', '未出现'))
        thisExp.addData('celebrity_name_displayed', name_display.get('celebrity', '未出现'))
        thisExp.addData('unfamiliar_name_displayed', name_display.get('unfamiliar', '未出现'))
        thisExp.addData('someoneElse_name_displayed', name_display.get('someoneElse', '未出现'))

        # 记录本次试验的按键映射
        thisExp.addData('key1_mapping', key_to_voice['1'])
        thisExp.addData('key2_mapping', key_to_voice['2'])
        thisExp.addData('key3_mapping', key_to_voice['3'])
        thisExp.addData('key4_mapping', key_to_voice['4'])
    TextComponent option1_practice_text
      letterHeight = 0.05
      pos = (-0.65, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent option2_practice_text
      letterHeight = 0.05
      pos = (-0.25, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent option3_practice_text
      letterHeight = 0.05
      pos = (0.25, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent option4_practice_text
      letterHeight = 0.05
      pos = (0.65, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent selection_practice_key_resp
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine feedback_practice
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    CodeComponent feedback_practice_code
      Code Type = Py
      Begin Routine:
        # feedback routine的Begin Routine部分
        # 获取被试的反应
        if selection_practice_key_resp.keys:
            # 处理反应键
            if type(selection_practice_key_resp.keys) is list:
                participant_response_key = selection_practice_key_resp.keys[0]
            else:
                participant_response_key = selection_practice_key_resp.keys

            # 处理反应时
            if type(selection_practice_key_resp.rt) is list:
                participant_rt = selection_practice_key_resp.rt[0]
            else:
                participant_rt = selection_practice_key_resp.rt

            # 使用本次试验的映射将按键转换为对应的身份
            participant_response = thisExp.current_key_to_voice.get(participant_response_key, '未知')
        else:
            participant_response = '无反应'
            participant_rt = -1
            participant_response_key = '无反应'

        # 判断回答是否正确
        is_correct = (participant_response == thisExp.correctAnswer)

        # 设置反馈文本
        if participant_response == '无反应':
            feedback_text = "未检测到反应，请尽快回答！"
            feedback_color = 'red'
        elif is_correct:
            feedback_text = "回答正确！"
            feedback_color = 'green'
        else:
            # 获取正确答案对应的中文名称
            correct_voice_type = thisExp.correctAnswer
            if correct_voice_type in thisExp.roleName:
                correct_name = thisExp.roleName[correct_voice_type][0]  # 中文名
                # 获取被试选择的身份名称
                if participant_response in thisExp.roleName:
                    chosen_name = thisExp.roleName[participant_response][0]  # 中文名

                    # 找出正确答案对应的按键
                    correct_key = None
                    for key, voice in thisExp.current_key_to_voice.items():
                        if voice == correct_voice_type:
                            correct_key = key
                            break

                    feedback_text = f"错误！您选择了{participant_response_key}({chosen_name})\n正确答案是{correct_key}({correct_name})"
                else:
                    feedback_text = f"错误！正确答案是{correct_name}"
            else:
                feedback_text = f"错误！正确答案是{thisExp.correctAnswer}"
            feedback_color = 'red'

        # 更新反馈文本组件
        feedback_practice_display.text = feedback_text
        feedback_practice_display.color = feedback_color

        # 记录反应数据
        thisExp.addData('response_key', participant_response_key)  # 记录的按键
        thisExp.addData('response_identity', participant_response)  # 记录的身份
        thisExp.addData('rt', participant_rt)
        thisExp.addData('correct', 1 if is_correct else 0)
    TextComponent feedback_practice_display
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine instr_formal1
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    ImageComponent instr_formal1_image
      image = image/instr_formal1.jpg
      size = (1.78, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instr_formal1_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine selection_formal
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    CodeComponent selection_formal1_code
      Code Type = Py
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      Begin Experiment:
        # 在selection_formal1_2 routine的Begin Experiment标签中添加以下代码
        import random

        # 定义选项位置映射（固定位置）
        option_positions = {
            '1': (-0.3, 0),  # 选项1位置（左）
            '2': (0, 0),     # 选项2位置（中）
            '3': (0.3, 0),    # 选项3位置（右）
            '4': (0.3, 0)    # 选项3位置（右）
        }


        # 定义正确答案映射 - 对应角色名称
        correct_answers = {
            'familiar': 'familiar',
            'unfamiliar': 'unfamiliar',
            'celebrity': 'celebrity',
            'someoneElse': 'someoneElse'
        }
      Begin Routine:
        # selection_formal1_2 routine的Begin Routine部分
        # 随机分配三个身份到三个按键位置
        voice_types = ['familiar', 'celebrity', 'unfamiliar', 'someoneElse']
        random.shuffle(voice_types)  # 随机打乱顺序

        # 创建本次试验的按键与身份映射
        key_to_voice = {
            '1': voice_types[0],
            '2': voice_types[1],
            '3': voice_types[2],
            '4': voice_types[3]
        }

        # 存储本次试验的映射关系，用于后续反馈
        thisExp.current_key_to_voice = key_to_voice

        # 为每个身份随机选择显示中文名还是英文名
        name_display = {}  # 存储本次试验中每个身份显示的名字
        language_choice = {}  # 存储语言选择（用于数据记录）

        for voice_type in voice_types:
            # 随机选择中文或英文
            chosen_language = random.choice(['chinese', 'english'])
            language_choice[voice_type] = chosen_language

            # 根据选择的语言获取对应的名字
            if chosen_language == 'chinese':
                name_display[voice_type] = thisExp.roleName[voice_type][0]  # 中文名
            else:
                name_display[voice_type] = thisExp.roleName[voice_type][1]  # 英文名

        # 设置三个选项文本组件的内容
        # 使用随机分配的映射关系
        option1_text.text = f"1. {name_display[key_to_voice['1']]}"    # 选项1
        option2_text.text = f"2. {name_display[key_to_voice['2']]}"    # 选项2
        option3_text.text = f"3. {name_display[key_to_voice['3']]}"    # 选项3
        option4_text.text = f"4. {name_display[key_to_voice['4']]}"    # 选项4
        # 记录语言选择信息和按键映射到实验数据
        thisExp.addData('familiar_name_language', language_choice.get('familiar', '未出现'))
        thisExp.addData('celebrity_name_language', language_choice.get('celebrity', '未出现'))
        thisExp.addData('unfamiliar_name_language', language_choice.get('unfamiliar', '未出现'))
        thisExp.addData('someoneElse_name_language', language_choice.get('someoneElse', '未出现'))
        thisExp.addData('familiar_name_displayed', name_display.get('familiar', '未出现'))
        thisExp.addData('celebrity_name_displayed', name_display.get('celebrity', '未出现'))
        thisExp.addData('unfamiliar_name_displayed', name_display.get('unfamiliar', '未出现'))
        thisExp.addData('someoneElse_name_displayed', name_display.get('someoneElse', '未出现'))

        # 记录本次试验的按键映射
        thisExp.addData('key1_mapping', key_to_voice['1'])
        thisExp.addData('key2_mapping', key_to_voice['2'])
        thisExp.addData('key3_mapping', key_to_voice['3'])
        thisExp.addData('key4_mapping', key_to_voice['4'])
    TextComponent option1_text
      letterHeight = 0.05
      pos = (-0.65, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent option2_text
      letterHeight = 0.05
      pos = (-0.25, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent option3_text
      letterHeight = 0.05
      pos = (0.25, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent option4_text
      letterHeight = 0.05
      pos = (0.65, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent selection_key_resp
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine feedback
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    CodeComponent feedback_code
      Code Type = Py
      Begin Routine:
        # feedback routine的Begin Routine部分
        # 获取被试的反应
        if selection_key_resp.keys:
            # 处理反应键
            if type(selection_key_resp.keys) is list:
                participant_response_key = selection_key_resp.keys[0]
            else:
                participant_response_key = selection_key_resp.keys

            # 处理反应时
            if type(selection_key_resp.rt) is list:
                participant_rt = selection_key_resp.rt[0]
            else:
                participant_rt = selection_key_resp.rt

            # 使用本次试验的映射将按键转换为对应的身份
            participant_response = thisExp.current_key_to_voice.get(participant_response_key, '未知')
        else:
            participant_response = '无反应'
            participant_rt = -1
            participant_response_key = '无反应'

        # 判断回答是否正确
        is_correct = (participant_response == thisExp.correctAnswer)

        # 设置反馈文本
        if participant_response == '无反应':
            feedback_text = "未检测到反应，请尽快回答！"
            feedback_color = 'red'
        elif is_correct:
            feedback_text = "回答正确！"
            feedback_color = 'green'
        else:
            # 获取正确答案对应的中文名称
            correct_voice_type = thisExp.correctAnswer
            if correct_voice_type in thisExp.roleName:
                correct_name = thisExp.roleName[correct_voice_type][0]  # 中文名
                # 获取被试选择的身份名称
                if participant_response in thisExp.roleName:
                    chosen_name = thisExp.roleName[participant_response][0]  # 中文名

                    # 找出正确答案对应的按键
                    correct_key = None
                    for key, voice in thisExp.current_key_to_voice.items():
                        if voice == correct_voice_type:
                            correct_key = key
                            break

                    feedback_text = f"错误！您选择了{participant_response_key}({chosen_name})\n正确答案是{correct_key}({correct_name})"
                else:
                    feedback_text = f"错误！正确答案是{correct_name}"
            else:
                feedback_text = f"错误！正确答案是{thisExp.correctAnswer}"
            feedback_color = 'red'

        # 更新反馈文本组件
        feedback_display.text = feedback_text
        feedback_display.color = feedback_color

        # 记录反应数据
        thisExp.addData('response_key', participant_response_key)  # 记录的按键
        thisExp.addData('response_identity', participant_response)  # 记录的身份
        thisExp.addData('rt', participant_rt)
        thisExp.addData('correct', 1 if is_correct else 0)
    TextComponent feedback_display
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine rest_within
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    CodeComponent rest_code
      Code Type = Py
      Begin Routine:
        import random
        # 生成0到1秒之间的随机持续时间
        rest_duration = random.uniform(0.2, 0.4)
    TextComponent rest_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rest_duration
      text = rest
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  Routine rest
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    ImageComponent rest_image
      image = image/rest.jpg
      size = (1.78, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent rest_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine formal1_run2_trial
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    CodeComponent formal2_trial_code
      Code Type = Py
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      Begin Routine:
        import pandas as pd

        # 获取当前trial索引
        trial_index = thisExp.trial_counter2

        current_trial = thisExp.trials_list_formal2[trial_index]
        currentSentence = current_trial['sentence_list']
        currentSentenceID = current_trial['sentenceID']
        currentVoice = current_trial['voice']
        currentfilepath = current_trial['filepath']

        # 更新计数器
        thisExp.trial_counter2 += 1
        thisExp.correctAnswer = correct_answers.get(currentVoice, '未知')

        thisExp.addData('sentence_list', currentSentence)
        thisExp.addData('sentenceID', currentSentenceID)
        thisExp.addData('voice', currentVoice)
        thisExp.addData('filepath', currentfilepath)
        thisExp.addData('correct_answer', thisExp.correctAnswer)
    SoundComponent formal1_run2_sound
      sound [set every repeat] = $currentfilepath
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine instr_nofeedback
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    ImageComponent instr_no_feedback_image
      image = image/instr_formal2.jpg
      size = (1.78, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instr_formal2_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine formal2_run3_trial
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    CodeComponent formal2_run3_trial_code
      Code Type = Py
      Begin Routine:
        import pandas as pd

        # 获取当前trial索引
        trial_index = thisExp.trial_counter3

        current_trial = thisExp.trials_list_formal3[trial_index]
        currentSentence = current_trial['sentence_list']
        currentSentenceID = current_trial['sentenceID']
        currentVoice = current_trial['voice']
        currentfilepath = current_trial['filepath']

        # 更新计数器
        thisExp.trial_counter3 += 1
        thisExp.correctAnswer = correct_answers.get(currentVoice, '未知')

        thisExp.addData('sentence_list', currentSentence)
        thisExp.addData('sentenceID', currentSentenceID)
        thisExp.addData('voice', currentVoice)
        thisExp.addData('filepath', currentfilepath)
        thisExp.addData('correct_answer', thisExp.correctAnswer)
    SoundComponent formal3_sound
      sound [set every repeat] = $currentfilepath
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine formal2_run4_trial
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    CodeComponent formal2_run4_trial_code
      Code Type = Py
      Begin Routine:
        import pandas as pd

        # 获取当前trial索引
        trial_index = thisExp.trial_counter4

        current_trial = thisExp.trials_list_formal4[trial_index]
        currentSentence = current_trial['sentence_list']
        currentSentenceID = current_trial['sentenceID']
        currentVoice = current_trial['voice']
        currentfilepath = current_trial['filepath']

        # 更新计数器
        thisExp.trial_counter4 += 1
        thisExp.correctAnswer = correct_answers.get(currentVoice, '未知')

        thisExp.addData('sentence_list', currentSentence)
        thisExp.addData('sentenceID', currentSentenceID)
        thisExp.addData('voice', currentVoice)
        thisExp.addData('filepath', currentfilepath)
        thisExp.addData('correct_answer', thisExp.correctAnswer)
    SoundComponent formal4_sound
      sound [set every repeat] = $currentfilepath
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine end
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    ImageComponent end_image
      image = image/end.jpg
      size = (1.78, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine lab_voice
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    TextComponent lab_voice_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        请先熟悉一段声音。
        吴婷婷
        WuTingTing
    SoundComponent lab_sound
      sound [set every repeat] = stimulus/voice_learned/吴婷婷_voice_learned.wav
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_lab_sound
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Stimuli_assignment
  Routine instruction
  Routine instr_practice
  Routine lab_voice
  LoopInitiator practice_loop_trials loopType="TrialHandler"
    loopType = sequential
    nReps = 9
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    Routine fixation
    Routine practice_trial
    Routine selection_practice
    Routine feedback_practice
  LoopTerminator practice_loop_trials
  Routine instr_formal1
  LoopInitiator formal1_1_loop_trials loopType="TrialHandler"
    loopType = sequential
    nReps = 30
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    Routine fixation
    Routine formal1_run1_trial
    Routine selection_formal
    Routine feedback
    Routine rest_within
  LoopTerminator formal1_1_loop_trials
  Routine rest
  LoopInitiator formal1_2_loop_trials loopType="TrialHandler"
    loopType = sequential
    nReps = 30
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    Routine fixation
    Routine formal1_run2_trial
    Routine selection_formal
    Routine feedback
    Routine rest_within
  LoopTerminator formal1_2_loop_trials
  Routine rest
  Routine instr_nofeedback
  LoopInitiator formal2_3_loop_trials loopType="TrialHandler"
    loopType = sequential
    nReps = 30
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    Routine fixation
    Routine formal2_run3_trial
    Routine selection_formal
    Routine rest_within
  LoopTerminator formal2_3_loop_trials
  Routine rest
  LoopInitiator formal2_4_loop_trials loopType="TrialHandler"
    loopType = sequential
    nReps = 30
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    Routine fixation
    Routine formal2_run4_trial
    Routine selection_formal
    Routine rest_within
  LoopTerminator formal2_4_loop_trials
  Routine end
