PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Voice_indentity_task
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Stimuli_assignment
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    CodeComponent assign_code
      Code Type = Py
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      Begin Experiment:
        import pandas as pd
        import random

        stimulus_file = os.path.join(os.getcwd(), 'stimulus', 'Stimulus_info.xlsx')
        roleName_file = os.path.join(os.getcwd(), 'stimulus', 'RoleName.xlsx')

        try:
            stimulus_df = pd.read_excel(stimulus_file)
            rolename_df = pd.read_excel(roleName_file)
            print(f"成功读取刺激材料文件，共{len(stimulus_df)}个刺激")
        except Exception as e:
            print(f"读取刺激材料文件失败: {e}")
            # 创建示例数据（416个刺激）
            stimulus_df = pd.DataFrame({
                'sentenceID': range(1, 417),  # 修改为416个刺激
                'sentences_list': [f'句子_{i}' for i in range(1, 417)]
            })

        roleName = {row['Role']: [row['Name'], row['EnglishName']] for _, row in rolename_df.iterrows()}
        thisExp.roleName = roleName
        # 将416个刺激随机分成8组，每组52个
        all_stimuli = stimulus_df.copy()
        all_indices = list(all_stimuli.index)
        random.shuffle(all_indices)  # 随机打乱

        # 分成4组，每组104个
        group_size = len(all_stimuli) // 8
        group_indices = [
            all_indices[:group_size],
            all_indices[group_size:group_size*2],
            all_indices[group_size*2:group_size*3],
            all_indices[group_size*3:group_size*4],
            all_indices[group_size*4:group_size*5],
            all_indices[group_size*5:group_size*6],
            all_indices[group_size*6:group_size*7],
            all_indices[group_size*7:]
        ]

        # 将所有组的数据存储在group_stimuli列表中
        group_stimuli = []  # 注意这里是单数形式
        for indices in group_indices:
            group_data = all_stimuli.loc[indices].reset_index(drop=True)
            group_stimuli.append(group_data)

        print(f"总刺激数量: {len(all_stimuli)}")
        for i, group in enumerate(group_stimuli):
            print(f"第{i+1}组刺激数量: {len(group)}")
        #    print(group)

        # 创建一个包含4个子列表的大数组来存储所有试验
        all_trials = [[] for _ in range(8)]

        for group_idx, group_data in enumerate(group_stimuli):  # 这里修正为 group_stimuli
            for idx, row in group_data.iterrows():
                trial = {
                    'sentenceID': row['sentenceID'],
                    'sentence_list': row['sentences_list'],
                    'category': row['category'],
                    'mid_category': row['mid_category'],
                    'sub_category': row['sub_category'],
                    'condition': row['condition'],
                    'Stimulus_path': row['Stimulus_path'],
                    'StimulusID': row['StimulusID'],
                    'group': group_idx + 1  # 组号从1开始
                }
                all_trials[group_idx].append(trial)

            # 随机化当前组内的试验顺序
            random.shuffle(all_trials[group_idx])

        print(f"第一组刺激随机化: {len(all_trials[0])}")
        print(f"第二组刺激随机化: {len(all_trials[1])}")
        print(f"第三组刺激随机化: {len(all_trials[2])}")
        print(f"第四组刺激随机化: {len(all_trials[3])}")

        # 或者直接保存整个数组
        thisExp.all_trials = all_trials

        # 创建trial_counter数组
        thisExp.trial_counter = [0] * 8
        print(f"trial_counter数组已初始化: {thisExp.trial_counter}")

        thisExp.attention_trials_all = [None] * 8
        thisExp.current_attention_index_all = [0] * 8
        thisExp.show_attention_all = [False] * 8

        number = []
  Routine instruction
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    ImageComponent instruction_image
      image = image/instr_start.jpg
      size = (1.78, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instruction_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_practice
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    ImageComponent instr_practice_image
      image = image/instr_practice.jpg
      size = (1.78, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instr_practice_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = ＋
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    ParallelOutComponent fixation_port
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 10
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine practice_trial
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    CodeComponent practice_trial_code
      Code Type = Py
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      Begin Experiment:
        currentpracticefilepath = []
      Begin Routine:
        import pandas as pd

        # 获取当前trial索引
        trial_index = thisExp.practicetrial_counter

        currentpractice_trial = thisExp.trials_list_practice[trial_index]
        currentpracticeVoice = currentpractice_trial['voice']
        currentpracticefilepath = currentpractice_trial['filepath']

        print(f"试验{trial_index+1}: 声音条件={currentpracticeVoice}, 文件={currentpracticefilepath}")

        # 更新计数器
        thisExp.practicetrial_counter += 1
        thisExp.correctAnswer = correct_answers.get(currentpracticeVoice, '未知')

        thisExp.addData('voice', currentpracticeVoice)
        thisExp.addData('filepath', currentpracticefilepath)
        thisExp.addData('correct_answer', thisExp.correctAnswer)
    SoundComponent sound_practice
      sound [set every repeat] = $currentpracticefilepath
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine selection_practice
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    CodeComponent selection_practice_code
      Code Type = Py
      Begin Routine:
        # selection_formal1_2 routine的Begin Routine部分
        # 随机分配三个身份到三个按键位置
        voice_types = ['familiar', 'celebrity', 'unfamiliar']
        random.shuffle(voice_types)  # 随机打乱顺序

        # 创建本次试验的按键与身份映射
        key_to_voice = {
            '1': voice_types[0],
            '2': voice_types[1],
            '3': voice_types[2]
        }

        # 存储本次试验的映射关系，用于后续反馈
        thisExp.current_key_to_voice = key_to_voice

        # 为每个身份随机选择显示中文名还是英文名
        name_display = {}  # 存储本次试验中每个身份显示的名字
        language_choice = {}  # 存储语言选择（用于数据记录）

        for voice_type in voice_types:
            # 随机选择中文或英文
            chosen_language = random.choice(['chinese', 'english'])
            language_choice[voice_type] = chosen_language

            # 根据选择的语言获取对应的名字
            if chosen_language == 'chinese':
                name_display[voice_type] = thisExp.roleName[voice_type][0]  # 中文名
            else:
                name_display[voice_type] = thisExp.roleName[voice_type][1]  # 英文名

        # 设置三个选项文本组件的内容
        # 使用随机分配的映射关系
        option1_practice_text.text = f"1. {name_display[key_to_voice['1']]}"    # 选项1
        option2_practice_text.text = f"2. {name_display[key_to_voice['2']]}"    # 选项2
        option3_practice_text.text = f"3. {name_display[key_to_voice['3']]}"    # 选项3

        # 记录语言选择信息和按键映射到实验数据
        thisExp.addData('familiar_name_language', language_choice.get('familiar', '未出现'))
        thisExp.addData('celebrity_name_language', language_choice.get('celebrity', '未出现'))
        thisExp.addData('unfamiliar_name_language', language_choice.get('unfamiliar', '未出现'))
        thisExp.addData('familiar_name_displayed', name_display.get('familiar', '未出现'))
        thisExp.addData('celebrity_name_displayed', name_display.get('celebrity', '未出现'))
        thisExp.addData('unfamiliar_name_displayed', name_display.get('unfamiliar', '未出现'))

        # 记录本次试验的按键映射
        thisExp.addData('key1_mapping', key_to_voice['1'])
        thisExp.addData('key2_mapping', key_to_voice['2'])
        thisExp.addData('key3_mapping', key_to_voice['3'])
    TextComponent option1_practice_text
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent option2_practice_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent option3_practice_text
      letterHeight = 0.05
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent selection_practice_key_resp
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine feedback_practice
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    CodeComponent feedback_practice_code
      Code Type = Py
      Begin Routine:
        # feedback routine的Begin Routine部分
        # 获取被试的反应
        if selection_practice_key_resp.keys:
            # 处理反应键
            if type(selection_practice_key_resp.keys) is list:
                participant_response_key = selection_practice_key_resp.keys[0]
            else:
                participant_response_key = selection_practice_key_resp.keys

            # 处理反应时
            if type(selection_practice_key_resp.rt) is list:
                participant_rt = selection_practice_key_resp.rt[0]
            else:
                participant_rt = selection_practice_key_resp.rt

            # 使用本次试验的映射将按键转换为对应的身份
            participant_response = thisExp.current_key_to_voice.get(participant_response_key, '未知')
        else:
            participant_response = '无反应'
            participant_rt = -1
            participant_response_key = '无反应'

        # 判断回答是否正确
        is_correct = (participant_response == thisExp.correctAnswer)

        # 设置反馈文本
        if participant_response == '无反应':
            feedback_text = "未检测到反应，请尽快回答！"
            feedback_color = 'red'
        elif is_correct:
            feedback_text = "回答正确！"
            feedback_color = 'green'
        else:
            # 获取正确答案对应的中文名称
            correct_voice_type = thisExp.correctAnswer
            if correct_voice_type in thisExp.roleName:
                correct_name = thisExp.roleName[correct_voice_type][0]  # 中文名
                # 获取被试选择的身份名称
                if participant_response in thisExp.roleName:
                    chosen_name = thisExp.roleName[participant_response][0]  # 中文名

                    # 找出正确答案对应的按键
                    correct_key = None
                    for key, voice in thisExp.current_key_to_voice.items():
                        if voice == correct_voice_type:
                            correct_key = key
                            break

                    feedback_text = f"错误！您选择了{participant_response_key}({chosen_name})\n正确答案是{correct_key}({correct_name})"
                else:
                    feedback_text = f"错误！正确答案是{correct_name}"
            else:
                feedback_text = f"错误！正确答案是{thisExp.correctAnswer}"
            feedback_color = 'red'

        # 更新反馈文本组件
        feedback_practice_display.text = feedback_text
        feedback_practice_display.color = feedback_color

        # 记录反应数据
        thisExp.addData('response_key', participant_response_key)  # 记录的按键
        thisExp.addData('response_identity', participant_response)  # 记录的身份
        thisExp.addData('rt', participant_rt)
        thisExp.addData('correct', 1 if is_correct else 0)
    TextComponent feedback_practice_display
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine feedback
    RoutineSettingsComponent feedback
      skipIf = thisExp.show_attention_all[run_index] == False
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    CodeComponent feedback_code
      Code Type = Py
      Begin Routine:
        # feedback routine的Begin Routine部分
        # 获取被试的反应
        if selection_key_resp.keys:
            # 处理反应键
            if type(selection_key_resp.keys) is list:
                participant_response_key = selection_key_resp.keys[0]
            else:
                participant_response_key = selection_key_resp.keys

            # 处理反应时
            if type(selection_key_resp.rt) is list:
                participant_rt = selection_key_resp.rt[0]
            else:
                participant_rt = selection_key_resp.rt

            # 使用本次试验的映射将按键转换为对应的身份
            participant_response = thisExp.current_key_to_voice.get(participant_response_key, '未知')
        else:
            participant_response = '无反应'
            participant_rt = -1
            participant_response_key = '无反应'

        # 判断回答是否正确
        is_correct = (participant_response == thisExp.correctAnswer)

        # 设置反馈文本
        if participant_response == '无反应':
            feedback_text = "未检测到反应，请尽快回答！"
            feedback_color = 'red'
        elif is_correct:
            feedback_text = "回答正确！"
            feedback_color = 'green'
        else:
            # 获取正确答案对应的中文名称
            correct_voice_type = thisExp.correctAnswer
            if correct_voice_type in thisExp.roleName:
                correct_name = thisExp.roleName[correct_voice_type][0]  # 中文名
                # 获取被试选择的身份名称
                if participant_response in thisExp.roleName:
                    chosen_name = thisExp.roleName[participant_response][0]  # 中文名

                    # 找出正确答案对应的按键
                    correct_key = None
                    for key, voice in thisExp.current_key_to_voice.items():
                        if voice == correct_voice_type:
                            correct_key = key
                            break

                    feedback_text = f"错误！您选择了{participant_response_key}({chosen_name})\n正确答案是{correct_key}({correct_name})"
                else:
                    feedback_text = f"错误！正确答案是{correct_name}"
            else:
                feedback_text = f"错误！正确答案是{thisExp.correctAnswer}"
            feedback_color = 'red'

        # 更新反馈文本组件
        feedback_display.text = feedback_text
        feedback_display.color = feedback_color

        # 记录反应数据
        thisExp.addData('response_key', participant_response_key)  # 记录的按键
        thisExp.addData('response_identity', participant_response)  # 记录的身份
        thisExp.addData('rt', participant_rt)
        thisExp.addData('correct', 1 if is_correct else 0)
    TextComponent feedback_display
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine rest_within
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    CodeComponent rest_code
      Code Type = Py
      Begin Routine:
        import random
        # 生成0到1秒之间的随机持续时间
        rest_duration = random.uniform(0.2, 0.4)
    TextComponent rest_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rest_duration
      text = rest
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    ParallelOutComponent rest_port
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 13
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine rest
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    ImageComponent rest_image
      image = image/rest.jpg
      size = (1.78, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent rest_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_nofeedback
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    ImageComponent instr_no_feedback_image
      image = image/instr_formal2.jpg
      size = (1.78, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instr_formal2_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    ImageComponent end_image
      image = image/end.jpg
      size = (1.78, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine content
    RoutineSettingsComponent content
      skipIf = thisExp.show_attention_all[run_index] == False
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    TextComponent content_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 刚才那个人说了什么？
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    ParallelOutComponent content_port
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 15
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine whose_voice
    RoutineSettingsComponent whose_voice
      skipIf = thisExp.show_attention_all[run_index] == False
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    CodeComponent selection_formal1_code
      Code Type = Py
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      Begin Experiment:
        # 在selection_formal1_2 routine的Begin Experiment标签中添加以下代码
      Begin Routine:
        # selection_formal1_2 routine的Begin Routine部分
        # 随机分配三个身份到三个按键位置
        voice_types = ['familiar', 'celebrity', 'unfamiliar', 'lab']
        random.shuffle(voice_types)  # 随机打乱顺序

        # 创建本次试验的按键与身份映射
        key_to_voice = {
            '1': voice_types[0],
            '2': voice_types[1],
            '3': voice_types[2],
            '4': voice_types[3],
        }

        # 存储本次试验的映射关系，用于后续反馈
        thisExp.current_key_to_voice = key_to_voice

        # 为每个身份随机选择显示中文名还是英文名
        name_display = {}  # 存储本次试验中每个身份显示的名字
        language_choice = {}  # 存储语言选择（用于数据记录）

        for voice_type in voice_types:
            # 随机选择中文或英文
            chosen_language = random.choice(['chinese', 'english'])
            language_choice[voice_type] = chosen_language

            # 根据选择的语言获取对应的名字
            if chosen_language == 'chinese':
                name_display[voice_type] = thisExp.roleName[voice_type][0]  # 中文名
            else:
                name_display[voice_type] = thisExp.roleName[voice_type][1]  # 英文名

        # 设置三个选项文本组件的内容
        # 使用随机分配的映射关系
        option1_text.text = f"1. {name_display[key_to_voice['1']]}"    # 选项1
        option2_text.text = f"2. {name_display[key_to_voice['2']]}"    # 选项2
        option3_text.text = f"3. {name_display[key_to_voice['3']]}"    # 选项3
        option4_text.text = f"4. {name_display[key_to_voice['4']]}"    # 选项3

        # 记录语言选择信息和按键映射到实验数据
        thisExp.addData('familiar_name_language', language_choice.get('familiar', '未出现'))
        thisExp.addData('celebrity_name_language', language_choice.get('celebrity', '未出现'))
        thisExp.addData('unfamiliar_name_language', language_choice.get('unfamiliar', '未出现'))
        thisExp.addData('lab_name_language', language_choice.get('lab', '未出现'))
        thisExp.addData('familiar_name_displayed', name_display.get('familiar', '未出现'))
        thisExp.addData('celebrity_name_displayed', name_display.get('celebrity', '未出现'))
        thisExp.addData('unfamiliar_name_displayed', name_display.get('unfamiliar', '未出现'))
        thisExp.addData('lab_name_displayed', name_display.get('lab', '未出现'))

        # 记录本次试验的按键映射
        thisExp.addData('key1_mapping', key_to_voice['1'])
        thisExp.addData('key2_mapping', key_to_voice['2'])
        thisExp.addData('key3_mapping', key_to_voice['3'])
        thisExp.addData('key4_mapping', key_to_voice['4'])
    TextComponent option1_text
      letterHeight = 0.05
      pos = option_positions['1']
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent option2_text
      letterHeight = 0.05
      pos = option_positions['2']
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent option3_text
      letterHeight = 0.05
      pos = option_positions['3']
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent option4_text
      letterHeight = 0.05
      pos = option_positions['4']
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ParallelOutComponent whose_voice_port_start
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 14
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    KeyboardComponent selection_key_resp
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine run2_code_routine
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    CodeComponent run2_code
      Code Type = Auto->JS
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      End Routine:
        run_index = 1
  Routine run3_code_routine
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    CodeComponent run3_code
      Code Type = Auto->JS
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      End Routine:
        run_index = 2
  Routine run4_code_routine
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    CodeComponent run4_code
      Code Type = Auto->JS
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      End Routine:
        run_index = 3
  Routine imagery
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    TextComponent imagery_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = ＋
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    ParallelOutComponent imagery_start_port
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 16
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent imagery_end_port
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 17
      startVal [time (s)] = 4
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine vividness_rating
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    SliderComponent vividness_slider
      font = Microsoft YaHei
      forceEndRoutine = True
      granularity = 0
      labels = "完全无法想象","25","50","75","非常清晰生动,像亲耳听到"
      letterHeight = 0.03
      size = (1.4, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      styles = rating
      ticks = (1, 25, 50, 75, 100)
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    ParallelOutComponent vividness_start_port
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 18
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent vividness_end_port
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 19
      startVal [time (s)] = 2
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine run1_trial
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    CodeComponent run1_trial_code
      Code Type = Py
      Begin Experiment:
        import random

        currentfilepath = []
        currentSentence = []
        name_display_trial_text = []

        # 定义选项位置映射（固定位置）
        option_positions = {
            '1': (-0.65, 0),  # 选项1位置（左）
            '2': (-0.25, 0),     # 选项2位置（中）
            '3': (0.25, 0),    # 选项3位置（右）
            '4': (0.65, 0)    # 选项4位置（右）
        }


        # 定义正确答案映射 - 对应角色名称
        correct_answers = {
            'familiar': 'familiar',
            'unfamiliar': 'unfamiliar',
            'celebrity': 'celebrity',
            'lab': 'lab'
        }
      Begin Routine:
        # 获取当前trial索引
        run_index = 0  # 根据当前run设置
        trial_index = thisExp.trial_counter[run_index]

        # 检查是否需要显示attention check
        thisExp.show_attention_all[run_index] = False
        if (thisExp.current_attention_index_all[run_index] < len(thisExp.attention_trials_all[run_index]) and
            trial_index == thisExp.attention_trials_all[run_index][thisExp.current_attention_index_all[run_index]]):
            thisExp.show_attention_all[run_index] = True
            thisExp.current_attention_index_all[run_index] += 1

        current_trial = thisExp.all_trials[run_index][trial_index]
        #print(f"current_trial:{current_trial}")
        currentSentence = current_trial['sentence_list']
        print(f"currentSentence:{currentSentence}")
        currentSentenceID = current_trial['sentenceID']
        currentCategory = current_trial['category']
        currentMidCategory = current_trial['mid_category']
        currentSubCategory = current_trial['sub_category']
        currentcondition = current_trial['condition']
        currentfilepath = current_trial['Stimulus_path']
        currentStimulusID = current_trial['StimulusID']

        # 更新计数器
        thisExp.trial_counter[run_index] += 1
        currentrole = correct_answers.get(currentcondition, '未知')
        print(f"currentrole:{currentrole}")
        thisExp.correctAnswer = currentrole

        # 为每个身份随机选择显示中文名还是英文名
        name_display_trial_text = []  # 存储本次试验中每个身份显示的名字
        chosen_language_trial_text = random.choice(['chinese', 'english'])
        print(f"chosen_language_trial_text:{chosen_language_trial_text}")

        # 根据选择的语言获取对应的名字
        if chosen_language_trial_text == 'chinese':
            name_display_trial_text = thisExp.roleName[currentrole][0]  # 中文名
        else:
            name_display_trial_text = thisExp.roleName[currentrole][1]  # 英文名

        print(f"name_display_trial_text:{name_display_trial_text}")

        run1_trial_rolename.text = name_display_trial_text
        run1_trial_sentence.text = currentSentence

        thisExp.addData('sentence_list', currentSentence)
        thisExp.addData('sentenceID', currentSentenceID)
        thisExp.addData('category', currentCategory)
        thisExp.addData('mid_category', currentMidCategory)
        thisExp.addData('sub_category', currentSubCategory)
        thisExp.addData('condition', currentcondition)
        thisExp.addData('Stimulus_path', currentfilepath)
        thisExp.addData('StimulusID', currentStimulusID)
        thisExp.addData('filepath', currentfilepath)
        thisExp.addData('correct_answer', thisExp.correctAnswer)
        thisExp.addData('currentroleName', name_display_trial_text)
        thisExp.addData('has_attention_check', thisExp.show_attention_all[run_index])  # 记录是否有attention check
    TextComponent run1_trial_rolename
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent run1_trial_sentence
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ParallelOutComponent trial_start_port_run1
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 11
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent trial_end_port_run1
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 12
      startVal [time (s)] = 3
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine run2_trial
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    CodeComponent run2_trial_code
      Code Type = Py
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      Begin Experiment:
        # 在每个run的正式trial的Begin Experiment中
        run_index = 1  # 第一个run为0，第二个为1，以此类推
        attention_trials = random.sample(range(52), 2)
        attention_trials.sort()
        thisExp.attention_trials_all[run_index] = attention_trials
        thisExp.current_attention_index_all[run_index] = 0
        thisExp.show_attention_all[run_index] = False
      Begin Routine:
        # 获取当前trial索引
        run_index = 1  # 根据当前run设置
        trial_index = thisExp.trial_counter[run_index]

        # 检查是否需要显示attention check
        thisExp.show_attention_all[run_index] = False
        if (thisExp.current_attention_index_all[run_index] < len(thisExp.attention_trials_all[run_index]) and
            trial_index == thisExp.attention_trials_all[run_index][thisExp.current_attention_index_all[run_index]]):
            thisExp.show_attention_all[run_index] = True
            thisExp.current_attention_index_all[run_index] += 1

        current_trial = thisExp.all_trials[run_index][trial_index]
        #print(f"current_trial:{current_trial}")
        currentSentence = current_trial['sentence_list']
        print(f"currentSentence:{currentSentence}")
        currentSentenceID = current_trial['sentenceID']
        currentCategory = current_trial['category']
        currentMidCategory = current_trial['mid_category']
        currentSubCategory = current_trial['sub_category']
        currentcondition = current_trial['condition']
        currentfilepath = current_trial['Stimulus_path']
        currentStimulusID = current_trial['StimulusID']

        # 更新计数器
        thisExp.trial_counter[run_index] += 1
        currentrole = correct_answers.get(currentcondition, '未知')
        print(f"currentrole:{currentrole}")
        thisExp.correctAnswer = currentrole

        # 为每个身份随机选择显示中文名还是英文名
        name_display_trial_text = []  # 存储本次试验中每个身份显示的名字
        chosen_language_trial_text = random.choice(['chinese', 'english'])
        print(f"chosen_language_trial_text:{chosen_language_trial_text}")

        # 根据选择的语言获取对应的名字
        if chosen_language_trial_text == 'chinese':
            name_display_trial_text = thisExp.roleName[currentrole][0]  # 中文名
        else:
            name_display_trial_text = thisExp.roleName[currentrole][1]  # 英文名

        print(f"name_display_trial_text:{name_display_trial_text}")

        run2_trial_rolename.text = name_display_trial_text
        run2_trial_sentence.text = currentSentence

        thisExp.addData('sentence_list', currentSentence)
        thisExp.addData('sentenceID', currentSentenceID)
        thisExp.addData('category', currentCategory)
        thisExp.addData('mid_category', currentMidCategory)
        thisExp.addData('sub_category', currentSubCategory)
        thisExp.addData('condition', currentcondition)
        thisExp.addData('Stimulus_path', currentfilepath)
        thisExp.addData('StimulusID', currentStimulusID)
        thisExp.addData('filepath', currentfilepath)
        thisExp.addData('correct_answer', thisExp.correctAnswer)
        thisExp.addData('currentroleName', name_display_trial_text)
        thisExp.addData('has_attention_check', thisExp.show_attention_all[run_index])  # 记录是否有attention check
    TextComponent run2_trial_rolename
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent run2_trial_sentence
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ParallelOutComponent trial_start_port_run2
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 21
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent trial_end_port_run2
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 22
      startVal [time (s)] = 3
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine run3_trial
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    CodeComponent run3_trial_code
      Code Type = Py
      Begin Experiment:
        # 在每个run的正式trial的Begin Experiment中
        run_index = 2  # 第一个run为0，第二个为1，以此类推
        attention_trials = random.sample(range(52), 2)
        attention_trials.sort()
        thisExp.attention_trials_all[run_index] = attention_trials
        thisExp.current_attention_index_all[run_index] = 0
        thisExp.show_attention_all[run_index] = False
      Begin Routine:
        # 获取当前trial索引
        run_index = 2  # 根据当前run设置
        trial_index = thisExp.trial_counter[run_index]

        # 检查是否需要显示attention check
        thisExp.show_attention_all[run_index] = False
        if (thisExp.current_attention_index_all[run_index] < len(thisExp.attention_trials_all[run_index]) and
            trial_index == thisExp.attention_trials_all[run_index][thisExp.current_attention_index_all[run_index]]):
            thisExp.show_attention_all[run_index] = True
            thisExp.current_attention_index_all[run_index] += 1

        current_trial = thisExp.all_trials[run_index][trial_index]
        #print(f"current_trial:{current_trial}")
        currentSentence = current_trial['sentence_list']
        print(f"currentSentence:{currentSentence}")
        currentSentenceID = current_trial['sentenceID']
        currentCategory = current_trial['category']
        currentMidCategory = current_trial['mid_category']
        currentSubCategory = current_trial['sub_category']
        currentcondition = current_trial['condition']
        currentfilepath = current_trial['Stimulus_path']
        currentStimulusID = current_trial['StimulusID']

        # 更新计数器
        thisExp.trial_counter[run_index] += 1
        currentrole = correct_answers.get(currentcondition, '未知')
        print(f"currentrole:{currentrole}")
        thisExp.correctAnswer = currentrole

        # 为每个身份随机选择显示中文名还是英文名
        name_display_trial_text = []  # 存储本次试验中每个身份显示的名字
        chosen_language_trial_text = random.choice(['chinese', 'english'])
        print(f"chosen_language_trial_text:{chosen_language_trial_text}")

        # 根据选择的语言获取对应的名字
        if chosen_language_trial_text == 'chinese':
            name_display_trial_text = thisExp.roleName[currentrole][0]  # 中文名
        else:
            name_display_trial_text = thisExp.roleName[currentrole][1]  # 英文名

        print(f"name_display_trial_text:{name_display_trial_text}")

        run3_trial_rolename.text = name_display_trial_text
        run3_trial_sentence.text = currentSentence

        thisExp.addData('sentence_list', currentSentence)
        thisExp.addData('sentenceID', currentSentenceID)
        thisExp.addData('category', currentCategory)
        thisExp.addData('mid_category', currentMidCategory)
        thisExp.addData('sub_category', currentSubCategory)
        thisExp.addData('condition', currentcondition)
        thisExp.addData('Stimulus_path', currentfilepath)
        thisExp.addData('StimulusID', currentStimulusID)
        thisExp.addData('filepath', currentfilepath)
        thisExp.addData('correct_answer', thisExp.correctAnswer)
        thisExp.addData('currentroleName', name_display_trial_text)
        thisExp.addData('has_attention_check', thisExp.show_attention_all[run_index])  # 记录是否有attention check
    TextComponent run3_trial_rolename
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent run3_trial_sentence
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ParallelOutComponent trial_start_port_run3
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 31
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent trial_end_port_run3
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 32
      startVal [time (s)] = 3
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine run4_trial
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    CodeComponent run4_trial_code
      Code Type = Py
      Begin Experiment:
        # 在每个run的正式trial的Begin Experiment中
        run_index = 3  # 第一个run为0，第二个为1，以此类推
        attention_trials = random.sample(range(52), 2)
        attention_trials.sort()
        thisExp.attention_trials_all[run_index] = attention_trials
        thisExp.current_attention_index_all[run_index] = 0
        thisExp.show_attention_all[run_index] = False
      Begin Routine:
        # 获取当前trial索引
        run_index = 3  # 根据当前run设置
        trial_index = thisExp.trial_counter[run_index]

        # 检查是否需要显示attention check
        thisExp.show_attention_all[run_index] = False
        if (thisExp.current_attention_index_all[run_index] < len(thisExp.attention_trials_all[run_index]) and
            trial_index == thisExp.attention_trials_all[run_index][thisExp.current_attention_index_all[run_index]]):
            thisExp.show_attention_all[run_index] = True
            thisExp.current_attention_index_all[run_index] += 1

        current_trial = thisExp.all_trials[run_index][trial_index]
        #print(f"current_trial:{current_trial}")
        currentSentence = current_trial['sentence_list']
        print(f"currentSentence:{currentSentence}")
        currentSentenceID = current_trial['sentenceID']
        currentCategory = current_trial['category']
        currentMidCategory = current_trial['mid_category']
        currentSubCategory = current_trial['sub_category']
        currentcondition = current_trial['condition']
        currentfilepath = current_trial['Stimulus_path']
        currentStimulusID = current_trial['StimulusID']

        # 更新计数器
        thisExp.trial_counter[run_index] += 1
        currentrole = correct_answers.get(currentcondition, '未知')
        print(f"currentrole:{currentrole}")
        thisExp.correctAnswer = currentrole

        # 为每个身份随机选择显示中文名还是英文名
        name_display_trial_text = []  # 存储本次试验中每个身份显示的名字
        chosen_language_trial_text = random.choice(['chinese', 'english'])
        print(f"chosen_language_trial_text:{chosen_language_trial_text}")

        # 根据选择的语言获取对应的名字
        if chosen_language_trial_text == 'chinese':
            name_display_trial_text = thisExp.roleName[currentrole][0]  # 中文名
        else:
            name_display_trial_text = thisExp.roleName[currentrole][1]  # 英文名

        print(f"name_display_trial_text:{name_display_trial_text}")

        run4_trial_rolename.text = name_display_trial_text
        run4_trial_sentence.text = currentSentence

        thisExp.addData('sentence_list', currentSentence)
        thisExp.addData('sentenceID', currentSentenceID)
        thisExp.addData('category', currentCategory)
        thisExp.addData('mid_category', currentMidCategory)
        thisExp.addData('sub_category', currentSubCategory)
        thisExp.addData('condition', currentcondition)
        thisExp.addData('Stimulus_path', currentfilepath)
        thisExp.addData('StimulusID', currentStimulusID)
        thisExp.addData('filepath', currentfilepath)
        thisExp.addData('correct_answer', thisExp.correctAnswer)
        thisExp.addData('currentroleName', name_display_trial_text)
        thisExp.addData('has_attention_check', thisExp.show_attention_all[run_index])  # 记录是否有attention check
    TextComponent run4_trial_rolename
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent run4_trial_sentence
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ParallelOutComponent trial_start_port_run4
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 41
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent trial_end_port_run4
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 42
      startVal [time (s)] = 3
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine run5_trial
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    CodeComponent run5_trial_code
      Code Type = Py
      Begin Experiment:
        # 在每个run的正式trial的Begin Experiment中
        run_index = 4  # 第一个run为0，第二个为1，以此类推
        attention_trials = random.sample(range(52), 2)
        attention_trials.sort()
        thisExp.attention_trials_all[run_index] = attention_trials
        thisExp.current_attention_index_all[run_index] = 0
        thisExp.show_attention_all[run_index] = False
      Begin Routine:
        # 获取当前trial索引
        run_index = 4  # 根据当前run设置
        trial_index = thisExp.trial_counter[run_index]

        # 检查是否需要显示attention check
        thisExp.show_attention_all[run_index] = False
        if (thisExp.current_attention_index_all[run_index] < len(thisExp.attention_trials_all[run_index]) and
            trial_index == thisExp.attention_trials_all[run_index][thisExp.current_attention_index_all[run_index]]):
            thisExp.show_attention_all[run_index] = True
            thisExp.current_attention_index_all[run_index] += 1

        current_trial = thisExp.all_trials[run_index][trial_index]
        #print(f"current_trial:{current_trial}")
        currentSentence = current_trial['sentence_list']
        print(f"currentSentence:{currentSentence}")
        currentSentenceID = current_trial['sentenceID']
        currentCategory = current_trial['category']
        currentMidCategory = current_trial['mid_category']
        currentSubCategory = current_trial['sub_category']
        currentcondition = current_trial['condition']
        currentfilepath = current_trial['Stimulus_path']
        currentStimulusID = current_trial['StimulusID']

        # 更新计数器
        thisExp.trial_counter[run_index] += 1
        currentrole = correct_answers.get(currentcondition, '未知')
        print(f"currentrole:{currentrole}")
        thisExp.correctAnswer = currentrole

        # 为每个身份随机选择显示中文名还是英文名
        name_display_trial_text = []  # 存储本次试验中每个身份显示的名字
        chosen_language_trial_text = random.choice(['chinese', 'english'])
        print(f"chosen_language_trial_text:{chosen_language_trial_text}")

        # 根据选择的语言获取对应的名字
        if chosen_language_trial_text == 'chinese':
            name_display_trial_text = thisExp.roleName[currentrole][0]  # 中文名
        else:
            name_display_trial_text = thisExp.roleName[currentrole][1]  # 英文名

        print(f"name_display_trial_text:{name_display_trial_text}")

        run5_trial_rolename.text = name_display_trial_text
        run5_trial_sentence.text = currentSentence

        thisExp.addData('sentence_list', currentSentence)
        thisExp.addData('sentenceID', currentSentenceID)
        thisExp.addData('category', currentCategory)
        thisExp.addData('mid_category', currentMidCategory)
        thisExp.addData('sub_category', currentSubCategory)
        thisExp.addData('condition', currentcondition)
        thisExp.addData('Stimulus_path', currentfilepath)
        thisExp.addData('StimulusID', currentStimulusID)
        thisExp.addData('filepath', currentfilepath)
        thisExp.addData('correct_answer', thisExp.correctAnswer)
        thisExp.addData('currentroleName', name_display_trial_text)
        thisExp.addData('has_attention_check', thisExp.show_attention_all[run_index])  # 记录是否有attention check
    TextComponent run5_trial_rolename
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent run5_trial_sentence
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ParallelOutComponent trial_start_port_run5
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 51
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent trial_end_port_run5
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 52
      startVal [time (s)] = 3
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine vividness_rating_reverse
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    SliderComponent vividness_slider_reverse
      font = Microsoft YaHei
      forceEndRoutine = True
      granularity = 0
      labels = "非常清晰生动,像亲耳听到","75","50","25","完全无法想象"
      letterHeight = 0.03
      size = (1.5, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      styles = rating
      ticks = (1, 25, 50, 75, 100)
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    ParallelOutComponent vividness_start_reverse_port
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 18
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent vividness_end_reverse_port
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 19
      startVal [time (s)] = 2
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine run6_trial
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    CodeComponent run6_trial_code
      Code Type = Py
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      Begin Experiment:
        # 在每个run的正式trial的Begin Experiment中
        run_index = 5  # 第一个run为0，第二个为1，以此类推
        attention_trials = random.sample(range(52), 2)
        attention_trials.sort()
        thisExp.attention_trials_all[run_index] = attention_trials
        thisExp.current_attention_index_all[run_index] = 0
        thisExp.show_attention_all[run_index] = False
      Begin Routine:
        # 获取当前trial索引
        run_index = 5  # 根据当前run设置
        trial_index = thisExp.trial_counter[run_index]

        # 检查是否需要显示attention check
        thisExp.show_attention_all[run_index] = False
        if (thisExp.current_attention_index_all[run_index] < len(thisExp.attention_trials_all[run_index]) and
            trial_index == thisExp.attention_trials_all[run_index][thisExp.current_attention_index_all[run_index]]):
            thisExp.show_attention_all[run_index] = True
            thisExp.current_attention_index_all[run_index] += 1

        current_trial = thisExp.all_trials[run_index][trial_index]
        #print(f"current_trial:{current_trial}")
        currentSentence = current_trial['sentence_list']
        print(f"currentSentence:{currentSentence}")
        currentSentenceID = current_trial['sentenceID']
        currentCategory = current_trial['category']
        currentMidCategory = current_trial['mid_category']
        currentSubCategory = current_trial['sub_category']
        currentcondition = current_trial['condition']
        currentfilepath = current_trial['Stimulus_path']
        currentStimulusID = current_trial['StimulusID']

        # 更新计数器
        thisExp.trial_counter[run_index] += 1
        currentrole = correct_answers.get(currentcondition, '未知')
        print(f"currentrole:{currentrole}")
        thisExp.correctAnswer = currentrole

        # 为每个身份随机选择显示中文名还是英文名
        name_display_trial_text = []  # 存储本次试验中每个身份显示的名字
        chosen_language_trial_text = random.choice(['chinese', 'english'])
        print(f"chosen_language_trial_text:{chosen_language_trial_text}")

        # 根据选择的语言获取对应的名字
        if chosen_language_trial_text == 'chinese':
            name_display_trial_text = thisExp.roleName[currentrole][0]  # 中文名
        else:
            name_display_trial_text = thisExp.roleName[currentrole][1]  # 英文名

        print(f"name_display_trial_text:{name_display_trial_text}")

        run6_trial_rolename.text = name_display_trial_text
        run6_trial_sentence.text = currentSentence

        thisExp.addData('sentence_list', currentSentence)
        thisExp.addData('sentenceID', currentSentenceID)
        thisExp.addData('category', currentCategory)
        thisExp.addData('mid_category', currentMidCategory)
        thisExp.addData('sub_category', currentSubCategory)
        thisExp.addData('condition', currentcondition)
        thisExp.addData('Stimulus_path', currentfilepath)
        thisExp.addData('StimulusID', currentStimulusID)
        thisExp.addData('filepath', currentfilepath)
        thisExp.addData('correct_answer', thisExp.correctAnswer)
        thisExp.addData('currentroleName', name_display_trial_text)
        thisExp.addData('has_attention_check', thisExp.show_attention_all[run_index])  # 记录是否有attention check
    TextComponent run6_trial_rolename
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent run6_trial_sentence
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ParallelOutComponent trial_start_port_run6
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 61
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent trial_end_port_run6
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 62
      startVal [time (s)] = 3
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine run7_trial
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    CodeComponent run7_trial_code
      Code Type = Py
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      Begin Experiment:
        # 在每个run的正式trial的Begin Experiment中
        run_index = 6  # 第一个run为0，第二个为1，以此类推
        attention_trials = random.sample(range(52), 2)
        attention_trials.sort()
        thisExp.attention_trials_all[run_index] = attention_trials
        thisExp.current_attention_index_all[run_index] = 0
        thisExp.show_attention_all[run_index] = False
      Begin Routine:
        # 获取当前trial索引
        run_index = 6  # 根据当前run设置
        trial_index = thisExp.trial_counter[run_index]

        # 检查是否需要显示attention check
        thisExp.show_attention_all[run_index] = False
        if (thisExp.current_attention_index_all[run_index] < len(thisExp.attention_trials_all[run_index]) and
            trial_index == thisExp.attention_trials_all[run_index][thisExp.current_attention_index_all[run_index]]):
            thisExp.show_attention_all[run_index] = True
            thisExp.current_attention_index_all[run_index] += 1

        current_trial = thisExp.all_trials[run_index][trial_index]
        #print(f"current_trial:{current_trial}")
        currentSentence = current_trial['sentence_list']
        print(f"currentSentence:{currentSentence}")
        currentSentenceID = current_trial['sentenceID']
        currentCategory = current_trial['category']
        currentMidCategory = current_trial['mid_category']
        currentSubCategory = current_trial['sub_category']
        currentcondition = current_trial['condition']
        currentfilepath = current_trial['Stimulus_path']
        currentStimulusID = current_trial['StimulusID']

        # 更新计数器
        thisExp.trial_counter[run_index] += 1
        currentrole = correct_answers.get(currentcondition, '未知')
        print(f"currentrole:{currentrole}")
        thisExp.correctAnswer = currentrole

        # 为每个身份随机选择显示中文名还是英文名
        name_display_trial_text = []  # 存储本次试验中每个身份显示的名字
        chosen_language_trial_text = random.choice(['chinese', 'english'])
        print(f"chosen_language_trial_text:{chosen_language_trial_text}")

        # 根据选择的语言获取对应的名字
        if chosen_language_trial_text == 'chinese':
            name_display_trial_text = thisExp.roleName[currentrole][0]  # 中文名
        else:
            name_display_trial_text = thisExp.roleName[currentrole][1]  # 英文名

        print(f"name_display_trial_text:{name_display_trial_text}")

        run7_trial_rolename.text = name_display_trial_text
        run7_trial_sentence.text = currentSentence

        thisExp.addData('sentence_list', currentSentence)
        thisExp.addData('sentenceID', currentSentenceID)
        thisExp.addData('category', currentCategory)
        thisExp.addData('mid_category', currentMidCategory)
        thisExp.addData('sub_category', currentSubCategory)
        thisExp.addData('condition', currentcondition)
        thisExp.addData('Stimulus_path', currentfilepath)
        thisExp.addData('StimulusID', currentStimulusID)
        thisExp.addData('filepath', currentfilepath)
        thisExp.addData('correct_answer', thisExp.correctAnswer)
        thisExp.addData('currentroleName', name_display_trial_text)
        thisExp.addData('has_attention_check', thisExp.show_attention_all[run_index])  # 记录是否有attention check
    TextComponent run7_trial_rolename
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent run7_trial_sentence
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ParallelOutComponent trial_start_port_run
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 71
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent trial_end_port_run7
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 72
      startVal [time (s)] = 3
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine run8_trial
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    CodeComponent run8_trial_code
      Code Type = Py
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      Begin Experiment:
        # 在每个run的正式trial的Begin Experiment中
        run_index = 7  # 第一个run为0，第二个为1，以此类推
        attention_trials = random.sample(range(52), 2)
        attention_trials.sort()
        thisExp.attention_trials_all[run_index] = attention_trials
        thisExp.current_attention_index_all[run_index] = 0
        thisExp.show_attention_all[run_index] = False
      Begin Routine:
        # 获取当前trial索引
        run_index = 7  # 根据当前run设置
        trial_index = thisExp.trial_counter[run_index]

        # 检查是否需要显示attention check
        thisExp.show_attention_all[run_index] = False
        if (thisExp.current_attention_index_all[run_index] < len(thisExp.attention_trials_all[run_index]) and
            trial_index == thisExp.attention_trials_all[run_index][thisExp.current_attention_index_all[run_index]]):
            thisExp.show_attention_all[run_index] = True
            thisExp.current_attention_index_all[run_index] += 1

        current_trial = thisExp.all_trials[run_index][trial_index]
        #print(f"current_trial:{current_trial}")
        currentSentence = current_trial['sentence_list']
        print(f"currentSentence:{currentSentence}")
        currentSentenceID = current_trial['sentenceID']
        currentCategory = current_trial['category']
        currentMidCategory = current_trial['mid_category']
        currentSubCategory = current_trial['sub_category']
        currentcondition = current_trial['condition']
        currentfilepath = current_trial['Stimulus_path']
        currentStimulusID = current_trial['StimulusID']

        # 更新计数器
        thisExp.trial_counter[run_index] += 1
        currentrole = correct_answers.get(currentcondition, '未知')
        print(f"currentrole:{currentrole}")
        thisExp.correctAnswer = currentrole

        # 为每个身份随机选择显示中文名还是英文名
        name_display_trial_text = []  # 存储本次试验中每个身份显示的名字
        chosen_language_trial_text = random.choice(['chinese', 'english'])
        print(f"chosen_language_trial_text:{chosen_language_trial_text}")

        # 根据选择的语言获取对应的名字
        if chosen_language_trial_text == 'chinese':
            name_display_trial_text = thisExp.roleName[currentrole][0]  # 中文名
        else:
            name_display_trial_text = thisExp.roleName[currentrole][1]  # 英文名

        print(f"name_display_trial_text:{name_display_trial_text}")

        run8_trial_rolename.text = name_display_trial_text
        run8_trial_sentence.text = currentSentence

        thisExp.addData('sentence_list', currentSentence)
        thisExp.addData('sentenceID', currentSentenceID)
        thisExp.addData('category', currentCategory)
        thisExp.addData('mid_category', currentMidCategory)
        thisExp.addData('sub_category', currentSubCategory)
        thisExp.addData('condition', currentcondition)
        thisExp.addData('Stimulus_path', currentfilepath)
        thisExp.addData('StimulusID', currentStimulusID)
        thisExp.addData('filepath', currentfilepath)
        thisExp.addData('correct_answer', thisExp.correctAnswer)
        thisExp.addData('currentroleName', name_display_trial_text)
        thisExp.addData('has_attention_check', thisExp.show_attention_all[run_index])  # 记录是否有attention check
    TextComponent run8_trial_rolename
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent run8_trial_sentence
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ParallelOutComponent trial_start_port_run8
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 81
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent trial_end_port_run8
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = 82
      startVal [time (s)] = 3
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine run5_code_routine
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  Routine run6_code_routine
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  Routine run7_code_routine
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  Routine run8_code_routine
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  Routine instr_formal
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    ImageComponent instr_formal_image
      image = image/instr_formal_part2.jpg
      size = (1.78, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instr_formal_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent run1_code
      Code Type = Py
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      End Routine:
        # 在每个run的正式trial的Begin Experiment中
        run_index = 0  # 第一个run为0，第二个为1，以此类推
        attention_trials = random.sample(range(52), 2)
        attention_trials.sort()
        thisExp.attention_trials_all[run_index] = attention_trials
        thisExp.current_attention_index_all[run_index] = 0
        thisExp.show_attention_all[run_index] = False

        print(f"show_attention_all: {thisExp.show_attention_all}")
Flow
  Routine Stimuli_assignment
  Routine instr_formal
  LoopInitiator loop_trials_run1 loopType="TrialHandler"
    loopType = sequential
    nReps = 52
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    Routine fixation
    Routine run1_trial
    Routine whose_voice
    Routine feedback
    Routine content
    Routine imagery
    Routine vividness_rating
    Routine rest_within
  LoopTerminator loop_trials_run1
  Routine rest
  Routine run2_code_routine
  LoopInitiator loop_trials_run2 loopType="TrialHandler"
    loopType = sequential
    nReps = 52
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    Routine fixation
    Routine run2_trial
    Routine whose_voice
    Routine feedback
    Routine content
    Routine imagery
    Routine vividness_rating
    Routine rest_within
  LoopTerminator loop_trials_run2
  Routine rest
  Routine run3_code_routine
  LoopInitiator loop_trials_run3 loopType="TrialHandler"
    loopType = sequential
    nReps = 52
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    Routine fixation
    Routine run3_trial
    Routine whose_voice
    Routine feedback
    Routine content
    Routine imagery
    Routine vividness_rating
    Routine rest_within
  LoopTerminator loop_trials_run3
  Routine rest
  Routine run4_code_routine
  LoopInitiator loop_trials_run4 loopType="TrialHandler"
    loopType = sequential
    nReps = 52
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    Routine fixation
    Routine run4_trial
    Routine whose_voice
    Routine feedback
    Routine content
    Routine imagery
    Routine vividness_rating
    Routine rest_within
  LoopTerminator loop_trials_run4
  Routine rest
  Routine run5_code_routine
  LoopInitiator loop_trials_run5 loopType="TrialHandler"
    loopType = sequential
    nReps = 52
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    Routine fixation
    Routine run5_trial
    Routine whose_voice
    Routine feedback
    Routine content
    Routine imagery
    Routine vividness_rating_reverse
    Routine rest_within
  LoopTerminator loop_trials_run5
  Routine rest
  Routine run6_code_routine
  LoopInitiator loop_trials_run6 loopType="TrialHandler"
    loopType = sequential
    nReps = 52
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    Routine fixation
    Routine run6_trial
    Routine whose_voice
    Routine feedback
    Routine content
    Routine imagery
    Routine vividness_rating_reverse
    Routine rest_within
  LoopTerminator loop_trials_run6
  Routine rest
  Routine run7_code_routine
  LoopInitiator loop_trials_run7 loopType="TrialHandler"
    loopType = sequential
    nReps = 52
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    Routine fixation
    Routine run7_trial
    Routine whose_voice
    Routine feedback
    Routine content
    Routine imagery
    Routine vividness_rating_reverse
    Routine rest_within
  LoopTerminator loop_trials_run7
  Routine rest
  Routine run8_code_routine
  LoopInitiator loop_trials_run8 loopType="TrialHandler"
    loopType = sequential
    nReps = 52
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    Routine fixation
    Routine run8_trial
    Routine whose_voice
    Routine feedback
    Routine content
    Routine imagery
    Routine vividness_rating_reverse
    Routine rest_within
  LoopTerminator loop_trials_run8
  Routine end
